// ============================================================================
// nis_macro_capture_zstack.mac -- SpheroidPA capture daemon (plain Z-stack)
//
// For each spheroid: read af_trigger_NN.ini (stage_x/y from GUI Step 2), move XY,
// run a fixed Z-stack, save <id>_zstack.nd2, write af_done_NN.ini, delete trigger.
// NO autofocus (the built-in AF fails on the weak fluorescence signal) and NO
// Z-intensity correction (A1/confocal-only). Uses the current ND channels/exposure
// -- no illumination change -- UNLESS the trigger sets an optional "oc" key (GUI
// Step 4 Pre-PA card), in which case that optical configuration is selected before
// this spheroid's capture (e.g. 890/940/1050 nm Pre-PA baseline viz passes).
//
// Rig constraints baked in (verified): single main() only (no user functions);
// work dir + nd2 dir read at RUNTIME from C:/SpheroidPA/session.ini -- the GUI
// Step 3 writes that pointer file, so this daemon follows the current Step 1 save
// dir with NO hardcoded path; CRLF+ASCII; Int_GetKeyString+atof for numeric keys;
// sprintf args as one quoted name list.
//
// Z-stack geometry comes from GUI Step 3 (written into each af_trigger as
// z_centre / z_half / z_step). If a trigger lacks them, these defaults are used:
//   Z_CENTRE 7680, Z_HALF 90, Z_STEP 10  ->  7590..7770 um, 19 planes.
//
// PREREQ: 20X objective; XY+Z initialized; Z drive NOT in Escape; PFS OFF (it
// holds focus and defeats the Z-series); camera NOT in Live. Run GUI Step 3
// "Trigger NIS-E Z-Stack Captures" first -- it writes the af_trigger_NN.ini files
// AND C:/SpheroidPA/session.ini (work_dir + nd2_dir) that this macro reads.
// ============================================================================

#define SEC "spheroid"

int main()
{
    char work_dir[256];
    char cfg[256];
    char nd2_dir[256];
    char trigger_path[256];
    char done_path[256];
    char nd2_path[256];
    char spheroid_id[128];
    char rank_buf[16];
    char numbuf[64];
    char nn[8];
    char zbuf[32];
    char msg[256];
    char oc[128];
    char abort_path[256];
    double stage_x, stage_y;
    double z_centre, z_half, z_step, z_top, z_bottom;
    double idle_elapsed, close_after;
    int rank, move_rc, handled_any, handled_total, aborted;

    // Trigger + output dirs are NOT hardcoded: read them from the fixed pointer
    // file the GUI writes at Step 3, so this daemon follows the Step 1 save dir.
    strcpy(cfg, "C:/SpheroidPA/session.ini");
    work_dir[0] = 0;
    nd2_dir[0]  = 0;
    Int_GetKeyString(cfg, "paths", "work_dir", work_dir, 256);
    Int_GetKeyString(cfg, "paths", "nd2_dir", nd2_dir, 256);
    if( work_dir[0] == 0 )
    {
        WaitText(0, "session.ini has no work_dir.\nRun GUI Step 3 (Trigger NIS-E Z-Stack Captures) first, then re-run this macro.");
        return FALSE;
    }

    idle_elapsed = 0.0;
    handled_total = 0;
    aborted = FALSE;

    // Global abort flag written by the GUI's "Abort All" button. Polled once per rank
    // (i.e. between spheroids) so a long multi-spheroid run can be stopped without Esc.
    // A capture already in flight still finishes -- this is a clean boundary stop, not
    // a mid-Z-series kill. The GUI clears the flag when it starts the next run.
    strcpy(abort_path, work_dir);
    strcat(abort_path, "/abort.ini");

    while( idle_elapsed < 300.0 )
    {
        handled_any = FALSE;
        rank = 1;
        while( rank <= 96 )
        {
            // Probe per RANK, i.e. BETWEEN SPHEROIDS. Do not "optimise" this up to once
            // per pass: a single pass sweeps all 96 ranks and normally consumes the whole
            // batch, so a per-pass probe lets every remaining spheroid capture before the
            // flag is ever seen -- the abort would stop nothing on exactly the long
            // multi-spheroid runs it exists for. The extra ExistFile calls are negligible
            // next to a stage move + Z-series per spheroid.
            if( ExistFile(abort_path) == TRUE )
            {
                aborted = TRUE;
                rank = 97;              // leave the sweep (body below no-ops: no af_trigger_97)
            }
            sprintf(nn, "%02d", "rank");
            strcpy(trigger_path, work_dir);
            strcat(trigger_path, "/af_trigger_");
            strcat(trigger_path, nn);
            strcat(trigger_path, ".ini");

            if( ExistFile(trigger_path) == TRUE )
            {
                handled_any = TRUE;
                handled_total = handled_total + 1;

                spheroid_id[0] = 0;
                rank_buf[0]    = 0;
                Int_GetKeyString(trigger_path, SEC, "spheroid_id", spheroid_id, 128);
                Int_GetKeyString(trigger_path, SEC, "rank", rank_buf, 16);
                Int_GetKeyString(trigger_path, SEC, "stage_x", numbuf, 64);
                stage_x = atof(numbuf);
                Int_GetKeyString(trigger_path, SEC, "stage_y", numbuf, 64);
                stage_y = atof(numbuf);
                oc[0] = 0;
                Int_GetKeyString(trigger_path, SEC, "oc", oc, 128);
                // close_after=1 -> close the captured ND2 right after saving it. A
                // multi-spheroid x multi-OC x z-stack run otherwise leaves dozens of
                // image windows open, which clutters NIS-E and can stall acquisition.
                // Absent key -> 0 (keep open) so hand-written triggers behave as before.
                numbuf[0] = 0;
                Int_GetKeyString(trigger_path, SEC, "close_after", numbuf, 64);
                close_after = atof(numbuf);

                // Z-stack geometry from the trigger (GUI Step 3); fall back to
                // defaults if a key is absent (atof returns 0 for missing/blank).
                Int_GetKeyString(trigger_path, SEC, "z_centre", numbuf, 64);
                z_centre = atof(numbuf);
                if( z_centre == 0.0 )
                    z_centre = 7680.0;
                Int_GetKeyString(trigger_path, SEC, "z_half", numbuf, 64);
                if( numbuf[0] == 0 )
                    z_half = 90.0;            // key absent -> default full stack
                else
                    z_half = atof(numbuf);    // 0 = locate (single plane), >0 = stack
                Int_GetKeyString(trigger_path, SEC, "z_step", numbuf, 64);
                z_step = atof(numbuf);
                if( z_step == 0.0 )
                    z_step = 10.0;
                z_top    = z_centre + z_half;
                z_bottom = z_centre - z_half;
                sprintf(zbuf, "%.1f", "z_centre");

                sprintf(msg, "Capture rank %s (%s): moving + Z-stack", "rank_buf,spheroid_id");
                SetCommandText(msg);

                strcpy(done_path, work_dir);
                strcat(done_path, "/af_done_");
                strcat(done_path, nn);
                strcat(done_path, ".ini");

                strcpy(nd2_path, nd2_dir);
                strcat(nd2_path, "/");
                strcat(nd2_path, spheroid_id);
                strcat(nd2_path, "_zstack.nd2");

                move_rc = StgMoveXY(stage_x, stage_y, 0);
                if( move_rc != 1 )
                {
                    DeleteFile(done_path);
                    Int_SetKeyString(done_path, SEC, "rank", rank_buf);
                    Int_SetKeyString(done_path, SEC, "spheroid_id", spheroid_id);
                    Int_SetKeyString(done_path, SEC, "status", "move_failed");
                    DeleteFile(trigger_path);
                }
                else
                {
                    // Optional per-trigger optical config (GUI Step 4 Pre-PA card);
                    // absent -> unchanged behaviour (current ND channels/exposure).
                    if( oc[0] != 0 )
                    {
                        sprintf(msg, "Capture rank %s: selecting OC '%s'", "rank_buf,oc");
                        SetCommandText(msg);
                        SelectOptConf(oc);
                    }
                    if( z_half < 0.5 )
                    {
                        // 1-plane LOCATE pass (z_half=0): just the centre plane, fast,
                        // enough to find the spheroid centroid for re-centering.
                        StgMoveZ(z_centre, 0);
                        Capture();
                    }
                    else
                    {
                        ND_SetZSeriesExp(0, z_top, z_centre, z_bottom, z_step, 0, 0, 0, "", "", "");
                        ND_RunZSeriesExp();
                    }
                    DeleteFile(nd2_path);
                    ImageSaveAs(nd2_path, 14, 0);
                    // Close the just-saved capture so NIS-E does not accumulate one
                    // window per spheroid x OC x pass. Save arg 2 = QUERYSAVE_NO: the
                    // file is already on disk via ImageSaveAs above, and 0/ASK would pop
                    // a modal that wedges this daemon (RunMacro is synchronous).
                    if( close_after > 0.5 )
                        CloseCurrentDocument(2);

                    DeleteFile(done_path);
                    Int_SetKeyString(done_path, SEC, "rank", rank_buf);
                    Int_SetKeyString(done_path, SEC, "spheroid_id", spheroid_id);
                    Int_SetKeyString(done_path, SEC, "z_centre", zbuf);
                    Int_SetKeyString(done_path, SEC, "nd2_path", nd2_path);
                    if( oc[0] != 0 )
                        Int_SetKeyString(done_path, SEC, "oc", oc);
                    Int_SetKeyString(done_path, SEC, "status", "ok");
                    DeleteFile(trigger_path);
                }
            }
            rank = rank + 1;
        }

        if( aborted == TRUE )
        {
            idle_elapsed = 9999.0;      // set LAST so nothing below can clobber it
        }
        else
        {
            if( handled_any == TRUE )
            {
                idle_elapsed = 0.0;
            }
            else
            {
                if( handled_total > 0 )
                {
                    // Batch done and the queue is empty -> STOP. Do not linger and grab
                    // the next pass's triggers (e.g. the full Z-stack written after
                    // re-center); re-run this macro once per Trigger click.
                    idle_elapsed = 9999.0;
                }
                else
                {
                    SetCommandText("Capture daemon: waiting for triggers (click GUI Step 3 Trigger)");
                    Wait(1.0);
                    idle_elapsed = idle_elapsed + 1.0;
                }
            }
        }
    }

    // Report an operator abort back through the dispatcher handshake so the GUI log
    // shows "aborted" instead of a misleading "ok". The dispatcher preserves a status
    // the worker macro already wrote (it only defaults to "ok" when status is blank).
    if( aborted == TRUE )
    {
        // Consume the flag HERE. It is one-shot: if it survived, the operator's next
        // Z-Stack dispatch (or a manual Macro > Run) would abort at rank 1 having
        // captured nothing, and nothing else in the codebase ever deletes it -- it
        // would sit in the run folder indefinitely.
        DeleteFile(abort_path);
        strcpy(done_path, work_dir);
        strcat(done_path, "/cmd_done.ini");
        Int_SetKeyString(done_path, "command", "status", "aborted");
        Int_SetKeyString(done_path, "command", "message", "Capture daemon stopped by operator Abort All.");
        sprintf(msg, "Capture daemon: ABORTED by operator after %d capture(s).", "handled_total");
        // NO WaitText here: it is modal and RunMacro() is synchronous/in-process, so a
        // dialog nobody clicks wedges the dispatcher -- it would never consume another
        // cmd.ini while the GUI (which already read status=aborted from the file) shows
        // itself as idle and ready. SetCommandText + the cmd_done message key is enough.
        SetCommandText(msg);
        return TRUE;
    }

    SetCommandText(0);
    return TRUE;
}
